PsychoPy2experiment version="3.2.4"
Settings
  Audio lib = pygame
  Completed URL = https://pennstate.qualtrics.com/jfe/form/SV_3WareshAsHnRygl
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  color = $[-1,-1,-1]
  expName = jazznet
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Routines
  Routine instructions
    TextComponent instrTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In this task, you will be asked to judge whether two musical sequences are related.

        Do not overthink your choice, and select the 's' key for yes or the 'k' key for no as quickly as you can after the music stops playing.

        First, we will practice. Then, we will move to the main part of the experiment, which should take about 20 minutes.

        Press 'space' to begin the practice.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation so far!

        You will now be taken back to Qualtrics for a brief questionnaire.

        Press 'space' to continue.
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    SoundComponent sound_1
      durationEstim = 4
      sound [set every repeat] = $audioStim
      startVal [time (s)] = 0.5
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    TextComponent textPrompt
      letterHeight = 0.05
      startVal [frame N] = 2
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      text:
        Are these sequences related?

        Press "s" for yes, and "k" for no.


        ♫                                   ♫
    KeyboardComponent key_resp_2
      allowedKeys = 's','k'
      forceEndRoutine = True
      startVal [time (s)] = 4.0
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    CodeComponent trackProgress
      Code Type = Both
      Begin Experiment:
        #Counter for tracker message
        trialCount = 1

        #For breaks
        numBetween = 50

        countBetween = 0
      Begin JS Experiment:
        trialCount = 1;

        numBetween = 50;

        countBetween = 0;
      Begin JS Routine:
        var trialMsg = trialCount + '/300'
      Begin Routine:
        trialMsg = "{}/300". format(trials.thisN + 1)
      End JS Routine:
        trialCount = (trialCount + 1);

        if ((countBetween < numBetween)) {
            countBetween = (countBetween + 1);
        }
      End Routine:
        trialCount = trialCount + 1

        if countBetween < numBetween:
            countBetween = countBetween + 1
    TextComponent progress
      letterHeight = 0.05
      pos = (0.5, -0.4)
      startVal [frame N] = 2
      text [set every repeat] = $trialMsg
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  Routine practice
    SoundComponent sound_2
      durationEstim = 4
      sound [set every repeat] = $practiceStim
      startVal [time (s)] = 0.5
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    TextComponent textPractice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Are these two sequences related?

        Press "s" for yes, and "k" for no.


        ♫                                   ♫
    KeyboardComponent key_resp_practice
      allowedKeys = 's','k'
      forceEndRoutine = True
      startVal [time (s)] = 4.0
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    CodeComponent practiceTrack
      Code Type = Both
      Begin JS Experiment:
        practiceCount = 1
      Begin JS Routine:
        var msg = practiceCount + '/5'
      Begin Routine:
        msg = "{}/5". format(practiceTrials.thisN + 1)
      End JS Routine:
        practiceCount = practiceCount + 1
    TextComponent practiceProgress
      letterHeight = 0.05
      pos = (0.5, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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  Routine breakTime
    TextComponent breakText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great job!

        You may now take a break before moving to the main task, which should take about 20 minutes to complete.

        During the task, you'll have the opportunity to take several breaks.

        Press 'space' to continue when you're ready.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine setup
    TextComponent setupInstr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please complete this task in a quiet location with headphones on.

        First, we'll adjust your volume.

        Press 'space' to continue.
    KeyboardComponent setupKeys1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine setupSoundz_2
    SoundComponent setupSound
      durationEstim = 4.0
      sound = $soundStim
      startVal [time (s)] = 0.0
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    KeyboardComponent setupKeys2
      allowedKeys = 'space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine volume
    MouseComponent mouseVolume
      clickable = yes_poly, no_poly
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent would_you_like
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
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      text:
        Please play the sound until your volume is comfortable by clicking 'Yes' or 'No'.

        Would you like to repeat the sound?
    TextComponent yes
      letterHeight = 0.1
      pos = (-.3, -.2)
      startVal [time (s)] = 0.0
      text = Yes
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    TextComponent no
      letterHeight = 0.1
      pos = (.3, -.2)
      startVal [time (s)] = 0.0
      text = No
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    PolygonComponent yes_poly
      fillColor = $[1,1,1]
      opacity = 0
      pos = (-.3, -.2)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent no_poly
      fillColor = $[1,1,1]
      opacity = 0
      pos = (.3, -.2)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SoundComponent volumeSound
      durationEstim = 4
      sound [set every repeat] = stimuli/10_1.wav
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      End JS Routine:
        if (yes_poly.contains(mouseVolume) && mouseVolume.getPressed()[0] === 1) {
            continueRoutine = true;
        }

        if (no_poly.contains(mouseVolume) && mouseVolume.getPressed()[0] === 1) {
            currentLoop.finished = true;
        }
      End Routine:
        if mouseVolume.isPressedIn(yes_poly):
            continueRoutine = True

        if mouseVolume.isPressedIn(no_poly):
            setup_repeat.finished = True
  Routine takeabreak
    TextComponent takeabreak_text
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        You may now take a short break.

        Press 'space' when you're ready to continue.
    KeyboardComponent takeabreak_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent takeabreak_code
      Code Type = Both
      Begin Experiment:
        # skip routine if before 50
        if countBetween < numBetween:
            continueRoutine = False

        # reset count between
        if countBetween == numBetween:
            countBetween = 0
      Each JS Frame:
        if ((countBetween < numBetween)) {
            continueRoutine = false;
        }
      End JS Routine:
        if ((countBetween === numBetween)) {
            countBetween = 0;
        }
Flow
  Routine setup
  LoopInitiator setup_repeat loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine volume
  LoopTerminator setup_repeat
  Routine instructions
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = practicecond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('practiceStim', 'stimuli/Practice1.wav')]),
      OrderedDict([('practiceStim', 'stimuli/Practice2.wav')]),
      OrderedDict([('practiceStim', 'stimuli/Practice3.wav')]),
      OrderedDict([('practiceStim', 'stimuli/Practice4.wav')]),
      OrderedDict([('practiceStim', 'stimuli/Practice5.wav')])]
    Routine practice
  LoopTerminator practiceTrials
  Routine breakTime
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('audioStim', 'stimuli/1_1.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_2.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_3.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_4.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_5.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_6.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_7.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_8.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_9.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_10.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_11.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_12.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_13.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_14.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_15.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_16.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_17.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_18.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_19.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_20.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_21.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_22.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_23.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_24.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_25.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_26.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_27.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_28.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_29.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_30.wav')]),
      OrderedDict([('audioStim', 'stimuli/1_31.wav')])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
    Routine trial
    Routine takeabreak
  LoopTerminator trials
  Routine end
